PsychoPy2experiment version="3.0.0b12"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = LAC-paradigma
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Routines
  Routine trial
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Liebe(r) Proband(in),

        vielen Dank, dass Sie sich bereit erklärt haben, an dieser Studie teilzunehmen.

        Auf der nachfolgenden Seiten, möchten wir Sie zunächst über den Ablauf des Experiments informieren.

        Drücken Sie hierfür bitte die 'Leertaste'.
    KeyboardComponent key_welcome
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline
    KeyboardComponent key_baseline
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    TextComponent cross_1
      letterHeight = 0.8
      opacity = 0.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
      text = +
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    CodeComponent code_baseline
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.EXP, msg= 'baseline_unixtime: ' + '%.3f' %time.time())
        baseline_trial.addData('stimuli_unixtime', '%.3f' %time.time())

        logging.log(level=logging.EXP, msg= 'baseline_time: ' + datetime.now().strftime("%H:%M:%S.%f"))
        baseline_trial.addData('baseline_time', datetime.now().strftime("%H:%M:%S.%f"))

        start_time = expClock.getTime()
        logging.log(level=logging.EXP, msg= 'baseline_clock: %.2f' %start_time)
        baseline_trial.addData('baseline_clock', '%.2f' %start_time)



        if olf:
            olf.write(b"\nF1\r")
  Routine beginning
    TextComponent beginning_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Es startet nun der zweite Teil der Studie.

        Hierbei werden Ihnen verschiedene Gerüche während der Aufzeichnung Ihrer physiologischen Daten präsentiert.

        Bitte versuchen Sie auch hier, sich so wenig wie möglich zu bewegen und nicht zu reden.


        Weiter mit der 'Leertaste'.
    KeyboardComponent key_beginning
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_baseline_off
      Code Type = Py
      Begin Routine:
        if olf:
            olf.write(b"\nF1\r")
  Routine respiration_trigger
    CodeComponent code_respiration
      Code Type = Py
      Begin Routine:
        # calculate moving average
        trials.addData('inhale_unixtime', datetime.now().strftime("%H:%M:%S.%f"))
        logging.log(level=logging.EXP, msg= 'inhale_unixtime: ' + datetime.now().strftime("%H:%M:%S.%f"))

        trials.addData('inhale_time', datetime.now().strftime("%H:%M:%S.%f"))
        logging.log(level=logging.EXP, msg= 'inhale_time: ' + datetime.now().strftime("%H:%M:%S.%f"))

        start_time = expClock.getTime()
        trials.addData('inhale_clock', start_time)
        logging.log(level=logging.EXP, msg= 'inhale_clock: %.2f' %start_time)
    TextComponent cross_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_respiration
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent respiration_text
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Waiting for Inhale.
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    KeyboardComponent key_resp_overwrite
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stimuli
    TextComponent cross_3
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = +
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    TextComponent text_odor_DEBUG
      letterHeight = 0.2
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $f"{odor} on {channel}"
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  Routine intensity
    RatingScaleComponent intensity_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        win=win,
        marker='triangle',
        size=1.0,
        pos=[0.0, -0.4],
        low=1, high=9,
        labels=['nicht wahrnehmbar', ' sehr intensiv'],
        scale='Intensivität',
        markerStart='5',
        acceptKeys='space'
    TextComponent intensity_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Wie intensiv haben Sie diesen Geruch empfunden?
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  Routine pleasantness
    RatingScaleComponent pleasantness_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        win=win,
        marker='triangle',
        size=1.0,
        pos=[0.0, -0.4],
        low=1, high=9,
        labels=['sehr unangenehm', ' sehr angenehm'],
        scale='Annehmlichkeit',
        markerStart='5',
        acceptKeys='space'
    TextComponent pleasantness_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Wie angenehm haben Sie diesen Geruch empfunden?
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  Routine familarity
    RatingScaleComponent familarity_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        win=win,
        marker='triangle',
        size=1.0,
        pos=[0.0, -0.4],
        low=1, high=9,
        labels=['überhaupt nicht vertraut', ' sehr vertraut'],
        scale='Bekanntheit',
        markerStart='5',
        acceptKeys='space'
    TextComponent familarity_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Wie vertraut ist Ihnen dieser Geruch?
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  Routine arousel
    RatingScaleComponent arousel_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        win=win,
        marker='triangle',
        size=1.0,
        pos=[0.0, -0.4],
        low=1, high=9,
        labels=['sehr entspannend', 'sehr aktivierend'],
        scale='Aktivierung',
        markerStart='5',
        acceptKeys='space'
    TextComponent arousel_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Wie entspannend bzw. aktivierend ist dieser Duftstoff?
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  Routine interstimulus
    TextComponent text_interstimulus
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Warte auf nächsten Geruch ...
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    CodeComponent code_interstimulus
      Code Type = Py
      Begin Routine:
        end_time = expClock.getTime()

        trial_time = end_time - start_time
        trials.addData('trial_duration', trial_time)
        logging.log(level=logging.EXP, msg= 'trial_duration: %.2f' %trial_time)

        print(f"This trial {trials.thisRepN}.{trials.thisTrialN} took {trial_time} seconds.")
      Each Frame:
        interval = 60

        end_time = expClock.getTime()
        trial_time = end_time - start_time

        remaining_time = interval - trial_time
        remaining_time = '%.1f' %remaining_time

        if trial_time > interval:
            print("Continuing")
            continueRoutine = False
    KeyboardComponent key_interstimulus
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_remaining_time
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $remaining_time
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  Routine end
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Das war's!

        Vielen Dank für Ihre Teilnahme.

        Beenden mit der 'Leertaste'.
    KeyboardComponent key_end
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Die Studie gliedert sich in folgende Teile:

        1) Messung Ihrer physiologischen Daten im Ruhezustand. (~ 5 min)

        2) Messung Ihrer physiologischen Daten während der Wechselnden Darbietung von Gerüchen. (~ 60 min)

            2.1) Darbietung des Geruches.

            2.2) Bewertung des dargebotenen Geruches.

        3) Ende

        Weiter mit der 'Leertaste'.
    KeyboardComponent key_instructions
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_scale
    TextComponent example_scale_text
      letterHeight = 0.08
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Hier sehen Sie eine beispielhafte Bewertungsskala.

        Mit den Pfeiltasten können Sie einen Wert auswählen.
        Mit der Leertaste bestätigen Sie diesen.

        Probieren Sie dies hier aus und fahren dann mit der 'Leertaste' fort.
    RatingScaleComponent example_rating
      forceEndRoutine = True
      high = 7
      labels = label_start, label_end
      low = 1
      markerStart = 4
      pos = 0, -0.4
      scaleDescription = scale description
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        win=win,
        marker='triangle',
        size=1.0,
        pos=[0.0, -0.4],
        low=1, high=9,
        labels=['gar nicht', ' sehr stark'],
        scale='Eigenschaft',
        markerStart='5',
        acceptKeys='space'
  Routine starting_trial
    TextComponent starting_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Sie können das Experiment nun mit der 'Leertaste' starten.
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    KeyboardComponent key_starting
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline_instruction
    TextComponent baseline_instruc_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Wir starten nun mit der Messung Ihrer physiologischen Daten im Ruhezustand.

        Bitte betrachten Sie während der Aufzeichnung das Kreuz, welches auf dem Bildschirm erscheint und versuchen Sie sich dabei so wenig wie möglich zu bewegen und nicht zu reden.

        Bitte nehmen Sie nun die Schläuche wieder in die Nase und achten sie darauf, nur durch die Nase zu atmen.


        Weiter mit der 'Leertaste'.
    KeyboardComponent key_baseline_instruction
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stimuli_code
    CodeComponent odor_code
      Code Type = Py
      Begin Experiment:
        import serial
        import time
        from datetime import datetime

        expClock = core.Clock()

        try:
            olf = serial.Serial('COM5', 19200) # when testing WITH OLF
            print("Found COM Port, using it.")
        except serial.SerialException:
            print("Couldnt find COM port. Using port = None")
            olf = None # when testing withOUT OLF
      Begin Routine:
        trials.addData('stimuli_unixtime', '%.3f' %time.time())
        logging.log(level=logging.EXP, msg= 'stimuli_unixtime: ' + '%.3f' %time.time())

        trials.addData('stimuli_time', datetime.now().strftime("%H:%M:%S.%f"))
        logging.log(level=logging.EXP, msg= 'stimuli_time: ' + datetime.now().strftime("%H:%M:%S.%f"))

        start_time = expClock.getTime()
        trials.addData('stimuli_clock', start_time)
        logging.log(level=logging.EXP, msg= 'stimuli_clock: %.2f' %start_time)

        if olf:
            olf.write(b"\nF%d\r" %channel)
            time.sleep(3)
            olf.write(b"\nF%d\r" %channel)
        else:
            time.sleep(3)

        time.sleep(5)
        continueRoutine = False
      End Experiment:
        if olf:
            olf.close()
  Routine name_of_odor
    TextComponent text_name_of_odor
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = Können Sie die Ihnen vorgestellten Gerüche bennennen?
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    RatingScaleComponent rating_name_of_odor
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        win=win,
        marker='triangle',
        size=1.0,
        pos=[0.0, -0.4],
        low=1, high=2,
        labels=['Ja', 'Nein'],
        scale='Ja oder Nein?',
        markerStart='2',
        acceptKeys='space'
Flow
  Routine welcome
  Routine instructions
  Routine baseline_instruction
  LoopInitiator baseline_trial loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine baseline
  LoopTerminator baseline_trial
  Routine beginning
  Routine example_scale
  Routine starting_trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = odors.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('odor', 'coffee'), ('channel', 1)]),
      OrderedDict([('odor', 'lavender'), ('channel', 2)]),
      OrderedDict([('odor', 'empyty'), ('channel', 0)])]
    Routine respiration_trigger
    Routine respiration_trigger
    Routine stimuli
    Routine stimuli_code
    Routine intensity
    Routine pleasantness
    Routine familarity
    Routine arousel
    Routine interstimulus
  LoopTerminator trials
  Routine name_of_odor
  Routine end
